CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:51
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:\/(?P<Folder>[^\/].*)\/(?P<Condition>[^\/].*)\/(?P<ID>[^\/].*)\/(?P<ImageType>[^\/].*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:9
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C3")
    Name to assign these images:Egr2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C4")
    Name to assign these images:Klk6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C5")
    Name to assign these images:Ptgds
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does eq "_4.tif")
    Name to assign these images:LayerIV
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does eq "1-3.tif")
    Name to assign these images:LayerI_III
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does eq "5-6.tif")
    Name to assign these images:LayerV_VI
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does eq "CC.tif")
    Name to assign these images:CorpusCallosum
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Egr2
    Name the output image:Egr2_rs
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Egr2_rs
    Name the primary objects to be identified:Egr2_puncta
    Typical diameter of objects, in pixel units (Min,Max):4,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RescaleIntensity:[module_num:7|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
    Select the input image:Klk6
    Name the output image:Klk6_rs
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Klk6_rs
    Name the primary objects to be identified:Klk6_puncta
    Typical diameter of objects, in pixel units (Min,Max):2,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RescaleIntensity:[module_num:9|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
    Select the input image:Ptgds
    Name the output image:Ptgds_rs
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Ptgds_rs
    Name the primary objects to be identified:Ptgds_puncta
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:GFP
    Name the primary objects to be identified:OPC
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

MaskObjects:[module_num:13|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
    Select objects to be masked:Nuclei
    Name the masked objects:Cell
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:OPC
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:14|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
    Parent objects:Cell
    Child objects:Egr2_puncta
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Egr2_cells
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
RelateObjects:[module_num:15|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
    Parent objects:Cell
    Child objects:Klk6_puncta
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Klk6_cells
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
RelateObjects:[module_num:16|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
    Parent objects:Cell
    Child objects:Ptgds_puncta
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Ptgds_cells
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
ConvertImageToObjects:[module_num:17|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
    Select the input image:CorpusCallosum
    Name the output object:CorpusCallosum
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:18|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
    Select the input image:LayerI_III
    Name the output object:LayerI_III
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:19|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
    Select the input image:LayerIV
    Name the output object:LayerIV
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:20|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
    Select the input image:LayerV_VI
    Name the output object:LayerV_VI
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MaskImage:[module_num:21|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
    Select the input image:Egr2_rs
    Name the output image:Egr2_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Egr2_cells
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    Invert the mask?:No

MaskImage:[module_num:22|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
    Select the input image:Klk6_rs
    Name the output image:Klk6_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Klk6_cells
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    Invert the mask?:No

MaskImage:[module_num:23|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
    Select the input image:Ptgds_rs
    Name the output image:Ptgds_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Egr2_cells
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    Invert the mask?:No

RelateObjects:[module_num:24|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
    Parent objects:CorpusCallosum
    Child objects:Cell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:25|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
    Parent objects:LayerIV
    Child objects:Cell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:26|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
    Parent objects:LayerI_III
    Child objects:Cell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:27|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
    Parent objects:LayerV_VI
    Child objects:Cell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:28|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
    Select images to measure:Egr2_masked, Klk6_masked, Ptgds_masked
    Select objects to measure:Cell

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/media/sam/SamHDD/MT/single channel_roiMasks/Processed
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell|Parent_LayerV_VI,Cell|Parent_LayerI_III,Cell|Parent_Nuclei,Cell|Parent_LayerIV,Cell|Parent_CorpusCallosum,Cell|Intensity_StdIntensity_Ptgds_masked,Cell|Intensity_StdIntensity_Klk6_masked,Cell|Intensity_StdIntensity_Egr2_masked,Cell|Intensity_MedianIntensity_Klk6_masked,Cell|Intensity_MedianIntensity_Ptgds_masked,Cell|Intensity_MedianIntensity_Egr2_masked,Cell|Intensity_IntegratedIntensity_Ptgds_masked,Cell|Intensity_IntegratedIntensity_Klk6_masked,Cell|Intensity_IntegratedIntensity_Egr2_masked,Cell|Intensity_MeanIntensity_Ptgds_masked,Cell|Intensity_MeanIntensity_Egr2_masked,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Healthy2_
    Overwrite existing files without warning?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

MeasureImageIntensity:[module_num:30|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enabled:False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
    Select images to measure:CorpusCallosum, Egr2_masked, Klk6_masked, Ptgds_masked
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:CorpusCallosum, LayerIV, LayerI_III, LayerV_VI
    Calculate custom percentiles:No
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
MaskObjects:[module_num:31|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enabled:False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
    Select objects to be masked:Egr2_cells
    Name the masked objects:Egr2_CC
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CorpusCallosum
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:32|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enabled:False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
    Select objects to be masked:Klk6_cells
    Name the masked objects:Klk6_CC
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CorpusCallosum
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:33|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enabled:False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
    Select objects to be masked:Ptgds_cells
    Name the masked objects:Ptgds_CC
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CorpusCallosum
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:34|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enabled:False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
    Select objects to be masked:Egr2_cells
    Name the masked objects:Egr2_LayerI_III
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerI_III
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:35|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enabled:False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
    Select objects to be masked:Klk6_cells
    Name the masked objects:Klk6_LayerI_III
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerI_III
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:36|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enabled:False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
    Select objects to be masked:Ptgds_cells
    Name the masked objects:Ptgds_LayerI_III
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerI_III
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:37|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enabled:False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
    Select objects to be masked:Egr2_cells
    Name the masked objects:Egr2_LayerIV
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerIV
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:38|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enabled:False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
    Select objects to be masked:Klk6_cells
    Name the masked objects:Klk6_LayerIV
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerIV
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:39|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enabled:False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
    Select objects to be masked:Ptgds_cells
    Name the masked objects:Ptgds_LayerIV
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerIV
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:40|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enabled:False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
    Select objects to be masked:Egr2_cells
    Name the masked objects:Egr2_LayerV_VI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerV_VI
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:41|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enabled:False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
    Select objects to be masked:Klk6_cells
    Name the masked objects:Klk6_LayerV_VI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerV_VI
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:42|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enabled:False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
    Select objects to be masked:Ptgds_cells
    Name the masked objects:Ptgds_LayerV_VI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LayerV_VI
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

GrayToColor:[module_num:43|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Klk6_rs
    Select the image to be colored green:GFP
    Select the image to be colored blue:DNA
    Name the output image:Klk6_color
    Relative weight for the red image:1.
    Relative weight for the green image:0.5
    Relative weight for the blue image:0.75
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
OverlayOutlines:[module_num:44|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Klk6_color
    Name the output image:Klk6_LayerOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Klk6_CC
    Select outline color:Green
    Select objects to display:Klk6_LayerI_III
    Select outline color:Blue
    Select objects to display:Klk6_LayerIV
    Select outline color:Yellow
    Select objects to display:Klk6_LayerV_VI

SaveImages:[module_num:45|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Klk6_LayerOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Klk6
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Klk6LayerOverlay
    Saved file format:png
    Output file location:Same folder as image|git/test_image/processed
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

GrayToColor:[module_num:46|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Egr2_rs
    Select the image to be colored green:GFP
    Select the image to be colored blue:DNA
    Name the output image:Egr2_color
    Relative weight for the red image:1.0
    Relative weight for the green image:0.5
    Relative weight for the blue image:0.75
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
OverlayOutlines:[module_num:47|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Egr2_color
    Name the output image:Egr2_LayerOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Egr2_CC
    Select outline color:Green
    Select objects to display:Egr2_LayerI_III
    Select outline color:Blue
    Select objects to display:Egr2_LayerIV
    Select outline color:Yellow
    Select objects to display:Egr2_LayerV_VI

SaveImages:[module_num:48|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Egr2_LayerOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Egr2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Egr2LayerOverlay
    Saved file format:png
    Output file location:Same folder as image|git/test_image/processed
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

GrayToColor:[module_num:49|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Ptgds_rs
    Select the image to be colored green:GFP
    Select the image to be colored blue:DNA
    Name the output image:Ptgds_color
    Relative weight for the red image:1.0
    Relative weight for the green image:0.5
    Relative weight for the blue image:0.75
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
OverlayOutlines:[module_num:50|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Ptgds_color
    Name the output image:Ptgds_LayerOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Ptgds_CC
    Select outline color:Green
    Select objects to display:Ptgds_LayerI_III
    Select outline color:Blue
    Select objects to display:Ptgds_LayerIV
    Select outline color:Yellow
    Select objects to display:Ptgds_LayerV_VI

SaveImages:[module_num:51|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Ptgds_color
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ptgds
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:PtgdsLayerOverlay
    Saved file format:png
    Output file location:Same folder as image|git/test_image/processed
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
