CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TRITC")
    Name to assign these images:RBPMS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:Gene1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:Gene2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:RBPMS
    Name the output image:TRITC_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:6|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
    Select the input image:Gene1
    Name the output image:FITC_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:7|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
    Select the input image:Gene2
    Name the output image:Cy5_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertImageToObjects:[module_num:8|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
    Select the input image:Cy5_thresh
    Name the output object:FITC_puncta
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:RBPMS
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:11|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
    Parent objects:FITC_puncta
    Child objects:IdentifySecondaryObjects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
OverlayObjects:[module_num:12|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
    Input:Cy5_thresh
    Name the output image:OverlayObjects
    Objects:Nuclei
    Opacity:0.3

FilterObjects:[module_num:13|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
    Select the objects to filter:Nuclei
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:FITC_puncta
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Number_Object_Number
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:SegmentedNuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Gene2
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|git/test_image/processed
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:16|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SegmentedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|git/test_image/processed
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
